open();
	filedir = getDirectory("image");
	filename=getTitle();
	selectImage(filename); 
	//close();
	filein=filedir+filename; 
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	//open(filein);
	// orgstackID= getImageID; 
	// getDimensions(width,height,channels,slices,frames);
	// setLocation(50,50);
	//rootname = File.nameWithoutExtension; 
	fileNum = substring(filename,0,3);
	//print (rootname);
	//Zoom loaded image 
	run("Set... ", "zoom=350 x=128 y=128"); setLocation(25,50); //can be adjusted to suit monitor
	run("Enhance Contrast", "saturated=0.35"); setSlice(5);
	//run("Fire"); // can be changed according to user preference


//rename image for analysis
rename("Image");
run("Split Channels");

//Rename Channels
selectImage("C1-Image");
run("Duplicate...", "title=[Puncta] duplicate");
selectImage("C1-Image");
run("Duplicate...", "title=CaMKII duplicate");
selectImage("C1-Image");
run("Duplicate...", "title=[Measure] duplicate");
selectImage("C1-Image");
rename("Area");
selectImage("Area");
//Seperate Cell Area into images
run("Stack to Images");

//===========================================================CaMKII Cell Area=============================================================================================================================
/*//Issues with some Tif metadata requiring stupid channel renaming:
selectImage("t01_z1_c1");
rename("Area-0001");
selectImage("t02_z1_c1");
rename("Area-0002");
selectImage("t03_z1_c1");
rename("Area-0003");
selectImage("t04_z1_c1");
rename("Area-0004");
selectImage("t05_z1_c1");
rename("Area-0005");
selectImage("t06_z1_c1");
rename("Area-0006");
selectImage("t07_z1_c1");
rename("Area-0007");
selectImage("t08_z1_c1");
rename("Area-0008");
selectImage("t09_z1_c1");
rename("Area-0009");
selectImage("t10_z1_c1");
rename("Area-0010");
selectImage("t11_z1_c1");
rename("Area-0011");
selectImage("t12_z1_c1");
rename("Area-0012");
*/

//Create ROIs
selectImage("Area-0001");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0002");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0003");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0004");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0005");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0006");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0007");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0008");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0009");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0010");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0011");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area-0012");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");

//rename ROIs my guy
roiManager("Select", 0);
roiManager("Rename", "CCellArea1");
roiManager("Select", 1);
roiManager("Rename", "CCellArea2");
roiManager("Select", 2);
roiManager("Rename", "CCellArea3");
roiManager("Select", 3);
roiManager("Rename", "CCellArea4");
roiManager("Select", 4);
roiManager("Rename", "CCellArea5");
roiManager("Select", 5);
roiManager("Rename", "CCellArea6");
roiManager("Select", 6);
roiManager("Rename", "CCellArea7");
roiManager("Select", 7);
roiManager("Rename", "CCellArea8");
roiManager("Select", 8);
roiManager("Rename", "CCellArea9");
roiManager("Select", 9);
roiManager("Rename", "CCellArea10");
roiManager("Select", 10);
roiManager("Rename", "CCellArea11");
roiManager("Select", 11);
roiManager("Rename", "CCellArea12");

//Make the measurements and save ROIs
	roiManager("Deselect");
	roiManager("Save",""+filedir+" "+fileNum+"CaMKIICellArea_ROIset.zip");	
	selectImage("Measure");

// Define measurement settings (replace 'Area Mean Min Max' with the measurements you need)
	run("Set Measurements...", "area mean redirect=None decimal=2");

// Loop through the ROIs and measure them at corresponding timepoints
for (i = 0; i < roiManager("count"); i++) {
    roiManager("select", i);
    timepoint = i + 1; // Assuming ROI index corresponds to timepoint
    setSlice(timepoint); // Navigate to the correct timepoint
    run("Measure");
}

	saveAs("Results",""+filedir+" "+fileNum+"CaMKIICellArea_results.csv");
	selectWindow("Results"); run("Close"); roiManager("Reset");

//====================================================================CaMKII Puncta Area=================================================================================================================
//Create ROIs
selectImage("Puncta");
//Seperate Cell Puncta into images
run("Stack to Images");
//Issues with some Tif metadata requiring stupid channel renaming:
/*
selectImage("t01_z1_c1");
rename("Puncta-0001");
selectImage("t02_z1_c1");
rename("Puncta-0002");
selectImage("t03_z1_c1");
rename("Puncta-0003");
selectImage("t04_z1_c1");
rename("Puncta-0004");
selectImage("t05_z1_c1");
rename("Puncta-0005");
selectImage("t06_z1_c1");
rename("Puncta-0006");
selectImage("t07_z1_c1");
rename("Puncta-0007");
selectImage("t08_z1_c1");
rename("Puncta-0008");
selectImage("t09_z1_c1");
rename("Puncta-0009");
selectImage("t10_z1_c1");
rename("Puncta-0010");
selectImage("t11_z1_c1");
rename("Puncta-0011");
selectImage("t12_z1_c1");
rename("Puncta-0012");
*/

//resume code like normal
selectImage("Puncta-0001");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0002");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0003");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0004");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0005");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0006");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0007");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0008");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0009");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0010");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0011");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta-0012");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");

//rename ROIs my guy
roiManager("Select", 0);
roiManager("Rename", "CPunctaArea1");
roiManager("Select", 1);
roiManager("Rename", "CPunctaArea2");
roiManager("Select", 2);
roiManager("Rename", "CPunctaArea3");
roiManager("Select", 3);
roiManager("Rename", "CPunctaArea4");
roiManager("Select", 4);
roiManager("Rename", "CPunctaArea5");
roiManager("Select", 5);
roiManager("Rename", "CPunctaArea6");
roiManager("Select", 6);
roiManager("Rename", "CPunctaArea7");
roiManager("Select", 7);
roiManager("Rename", "CPunctaArea8");
roiManager("Select", 8);
roiManager("Rename", "CPunctaArea9");
roiManager("Select", 9);
roiManager("Rename", "CPunctaArea10");
roiManager("Select", 10);
roiManager("Rename", "CPunctaArea11");
roiManager("Select", 11);
roiManager("Rename", "CPunctaArea12");

//Make the measurements and save ROIs
	roiManager("Deselect");
	roiManager("Save",""+filedir+" "+fileNum+"CaMKIIPunctaArea_ROIset.zip");	
	selectImage("Measure");

// Define measurement settings (replace 'Area Mean Min Max' with the measurements you need)
	run("Set Measurements...", "area mean redirect=None decimal=2");

// Loop through the ROIs and measure them at corresponding timepoints
for (i = 0; i < roiManager("count"); i++) {
    roiManager("select", i);
    timepoint = i + 1; // Assuming ROI index corresponds to timepoint
    setSlice(timepoint); // Navigate to the correct timepoint
    run("Measure");
}

	saveAs("Results",""+filedir+" "+fileNum+"CaMKIIPunctaArea_results.csv");
	selectWindow("Results"); run("Close"); roiManager("Reset");
//==========================================================GluN2B Cell Area================================================================================================================================
//Rename Channels
selectImage("C2-Image");
run("Duplicate...", "title=[Puncta2] duplicate");
selectImage("C2-Image");
run("Duplicate...", "title=GluN2B duplicate");
selectImage("C2-Image");
run("Duplicate...", "title=[Measure2] duplicate");
selectImage("C2-Image");
rename("Area2");
selectImage("Area2");
//Seperate Cell Area into images
run("Stack to Images");

//have to rename the channels because of the stupid metadata for some reason
/*
selectImage("t01_z1_c2");
rename("Area2-0001");
selectImage("t02_z1_c2");
rename("Area2-0002");
selectImage("t03_z1_c2");
rename("Area2-0003");
selectImage("t04_z1_c2");
rename("Area2-0004");
selectImage("t05_z1_c2");
rename("Area2-0005");
selectImage("t06_z1_c2");
rename("Area2-0006");
selectImage("t07_z1_c2");
rename("Area2-0007");
selectImage("t08_z1_c2");
rename("Area2-0008");
selectImage("t09_z1_c2");
rename("Area2-0009");
selectImage("t10_z1_c2");
rename("Area2-0010");
selectImage("t11_z1_c2");
rename("Area2-0011");
selectImage("t12_z1_c2");
rename("Area2-0012");
*/

//Create ROIs
selectImage("Area2-0001");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0002");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0003");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0004");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0005");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0006");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0007");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0008");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0009");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0010");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0011");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Area2-0012");
setAutoThreshold("Otsu dark");
run("Create Mask");
run("Create Selection");
roiManager("Add");

//rename ROIs my guy
roiManager("Select", 0);
roiManager("Rename", "GCellArea1");
roiManager("Select", 1);
roiManager("Rename", "GCellArea2");
roiManager("Select", 2);
roiManager("Rename", "GCellArea3");
roiManager("Select", 3);
roiManager("Rename", "GCellArea4");
roiManager("Select", 4);
roiManager("Rename", "GCellArea5");
roiManager("Select", 5);
roiManager("Rename", "GCellArea6");
roiManager("Select", 6);
roiManager("Rename", "GCellArea7");
roiManager("Select", 7);
roiManager("Rename", "GCellArea8");
roiManager("Select", 8);
roiManager("Rename", "GCellArea9");
roiManager("Select", 9);
roiManager("Rename", "GCellArea10");
roiManager("Select", 10);
roiManager("Rename", "GCellArea11");
roiManager("Select", 11);
roiManager("Rename", "GCellArea12");

//Make the measurements and save ROIs
	roiManager("Deselect");
	roiManager("Save",""+filedir+" "+fileNum+"GluN2BCellArea_ROIset.zip");	
	selectImage("Measure2");

// Define measurement settings (replace 'Area Mean Min Max' with the measurements you need)
	run("Set Measurements...", "area mean redirect=None decimal=2");

// Loop through the ROIs and measure them at corresponding timepoints
for (i = 0; i < roiManager("count"); i++) {
    roiManager("select", i);
    timepoint = i + 1; // Assuming ROI index corresponds to timepoint
    setSlice(timepoint); // Navigate to the correct timepoint
    run("Measure");
}

	saveAs("Results",""+filedir+" "+fileNum+"GluN2BCellArea_results.csv");
	selectWindow("Results"); run("Close"); roiManager("Reset");
	
//===============================================GluN2B Puncta Area===========================================================================================================================================
//Create ROIs
selectImage("Puncta2");
//Seperate Cell Puncta into images
run("Stack to Images");

/*//stupid metadata issues that make me mad
selectImage("t01_z1_c2");
rename("Puncta2-0001");
selectImage("t02_z1_c2");
rename("Puncta2-0002");
selectImage("t03_z1_c2");
rename("Puncta2-0003");
selectImage("t04_z1_c2");
rename("Puncta2-0004");
selectImage("t05_z1_c2");
rename("Puncta2-0005");
selectImage("t06_z1_c2");
rename("Puncta2-0006");
selectImage("t07_z1_c2");
rename("Puncta2-0007");
selectImage("t08_z1_c2");
rename("Puncta2-0008");
selectImage("t09_z1_c2");
rename("Puncta2-0009");
selectImage("t10_z1_c2");
rename("Puncta2-0010");
selectImage("t11_z1_c2");
rename("Puncta2-0011");
selectImage("t12_z1_c2");
rename("Puncta2-0012");
*/

//resume code like normal
selectImage("Puncta2-0001");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0002");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0003");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0004");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0005");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0006");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0007");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0008");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0009");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0010");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0011");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");
selectImage("Puncta2-0012");
resetMinAndMax();
run("Enhance Contrast", "saturated=0.35");
setAutoThreshold("MaxEntropy dark no-reset stack");
run("Create Mask");
run("Create Selection");
roiManager("Add");

//rename ROIs my guy
roiManager("Select", 0);
roiManager("Rename", "GPunctaArea1");
roiManager("Select", 1);
roiManager("Rename", "GPunctaArea2");
roiManager("Select", 2);
roiManager("Rename", "GPunctaArea3");
roiManager("Select", 3);
roiManager("Rename", "GPunctaArea4");
roiManager("Select", 4);
roiManager("Rename", "GPunctaArea5");
roiManager("Select", 5);
roiManager("Rename", "GPunctaArea6");
roiManager("Select", 6);
roiManager("Rename", "GPunctaArea7");
roiManager("Select", 7);
roiManager("Rename", "GPunctaArea8");
roiManager("Select", 8);
roiManager("Rename", "GPunctaArea9");
roiManager("Select", 9);
roiManager("Rename", "GPunctaArea10");
roiManager("Select", 10);
roiManager("Rename", "GPunctaArea11");
roiManager("Select", 11);
roiManager("Rename", "GPunctaArea12");

//Make the measurements and save ROIs
	roiManager("Deselect");
	roiManager("Save",""+filedir+" "+fileNum+"GluN2BPunctaArea_ROIset.zip");	
	selectImage("Measure2");

// Define measurement settings (replace 'Area Mean Min Max' with the measurements you need)
	run("Set Measurements...", "area mean redirect=None decimal=2");

// Loop through the ROIs and measure them at corresponding timepoints
for (i = 0; i < roiManager("count"); i++) {
    roiManager("select", i);
    timepoint = i + 1; // Assuming ROI index corresponds to timepoint
    setSlice(timepoint); // Navigate to the correct timepoint
    run("Measure");
}

	saveAs("Results",""+filedir+" "+fileNum+"GluN2BPunctaArea_results.csv");
	selectWindow("Results"); run("Close"); roiManager("Reset");
	
	run("Close All");
